---
API: 2.1
OpenSesame: 3.3.12b1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title Primer
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/julan/Documents"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define pygaze_init Calibration
	set tracker_type "Simple dummy"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sketchpad Dot_screen
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x="[dot]" y=0.0 z_index=0

define sketchpad Instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="A  black dot will appear on the screen, your task is to indicate the location of this dot as quickly as possible. If the dot appers on the left side of the screen press z, or if the dot appears on the right side of the screen press m." x=0 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="==== Press the space bar to start ====" x=-13 y=185 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Calibration always
	run getting_started always
	run Instructions always
	run loop always

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define notepad getting_started
	__note__
	This is an example of the primer paradign
	
	Author: Julian Tejada
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	log response_keyboard_response
	log response_time_keyboard_response
	log left
	log right
	log dot

define loop loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 left "1.png"
	setcycle 0 right "2.png"
	setcycle 0 dot -275
	setcycle 1 left "3.png"
	setcycle 1 right "4.png"
	setcycle 1 dot 275
	setcycle 2 left "5.png"
	setcycle 2 right "1.png"
	setcycle 2 dot -275
	setcycle 3 left "2.png"
	setcycle 3 right "3.png"
	setcycle 3 dot 275
	setcycle 4 left "4.png"
	setcycle 4 right "5.png"
	setcycle 4 dot -275
	run sequence

define pygaze_start_recording new_pygaze_start_recording
	set status_msg "start_trial_dot_probe_[left]_[right]"
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording new_pygaze_start_recording_1
	set status_msg "start_trial_dot_position_[dot]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define pygaze_stop_recording new_pygaze_stop_recording_1
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define sequence sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run new_pygaze_start_recording always
	run stimulus_screen always
	run new_pygaze_stop_recording always
	run new_pygaze_start_recording_1 always
	run Dot_screen always
	run keyboard_response always
	run new_pygaze_stop_recording_1 always
	run logger always

define sketchpad stimulus_screen
	set duration 30
	set description "Displays stimuli"
	draw image center=1 file="[left]" scale=0.25 show_if=always x=-275 y=0 z_index=0
	draw image center=1 file="[right]" scale=0.25 show_if=always x=275 y=0 z_index=0

