---
API: 2.1
OpenSesame: 3.3.12b1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title Primer
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/media/sf_Public"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define pygaze_init Calibration
	set tracker_type "Simple dummy"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sketchpad Instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="A traffic light will appear on the screen and only when the light is green you should press the space bar. Try to answer as quickly as possible <br />" x=0 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="==== Press the space bar to start ====" x=-13 y=185 z_index=0

define sketchpad Test
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=1 show_if=always x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Calibration always
	run getting_started always
	run Instructions always
	run loop always

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define notepad getting_started
	__note__
	This is an example of the primer paradign
	
	Author: Julian Tejada
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define keyboard_response keyboard_response
	set timeout 1200
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log response_keyboard_response
	log response_time_keyboard_response
	log image
	log trial

define loop loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 image "gosignal.png"
	setcycle 0 trial go
	setcycle 1 image "gosignal.png"
	setcycle 1 trial go
	setcycle 2 image "gosignal.png"
	setcycle 2 trial go
	setcycle 3 image "nogosignal.png"
	setcycle 3 trial no_go
	setcycle 4 image "gosignal.png"
	setcycle 4 trial go
	setcycle 5 image "nogosignal.png"
	setcycle 5 trial no_go
	setcycle 6 image "nogosignal.png"
	setcycle 6 trial no_go
	setcycle 7 image "gosignal.png"
	setcycle 7 trial go
	setcycle 8 image "nogosignal.png"
	setcycle 8 trial no_go
	setcycle 9 image "gosignal.png"
	setcycle 9 trial go
	setcycle 10 image "nogosignal.png"
	setcycle 10 trial no_go
	setcycle 11 image "nogosignal.png"
	setcycle 11 trial no_go
	run sequence

define pygaze_start_recording new_pygaze_start_recording
	set status_msg "start_trial_gonogo_[image]_[trial]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording new_pygaze_stop_recording_1
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define sequence sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run new_pygaze_start_recording always
	run Test always
	run keyboard_response always
	run new_pygaze_stop_recording_1 always
	run logger always

